PsychoPy2experiment version="2022.2.4"
Settings
  Enable Escape = False
  Experiment info = {'UserName': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Faces/Nonfamiliar/1.jpg', 'Faces/Nonfamiliar/2.jpg', 'Faces/Nonfamiliar/3.jpg', 'Faces/Nonfamiliar/4.jpg', 'Faces/Nonfamiliar/5.jpg', 'Faces/Nonfamiliar/6.jpg', 'Faces/Nonfamiliar/7.jpg', 'Faces/Nonfamiliar/8.jpg', 'Faces/Nonfamiliar/9.jpg', 'Faces/Nonfamiliar/10.jpg', 'Faces/Familiar/1.jpg', 'Faces/Familiar/2.jpg', 'Faces/Familiar/3.jpg', 'Faces/Familiar/4.jpg', 'Faces/Familiar/5.jpg', 'Faces/Familiar/6.jpg', 'Faces/Familiar/7.jpg', 'Faces/Familiar/8.jpg', 'Faces/Familiar/9.jpg', 'Faces/Familiar/10.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Face
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Please look at the sequence of face photos while we register your brainwaves.

         Press "Space" to start,
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimuli
    CodeComponent code
      Code Type = JS
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      Before JS Experiment:
        function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }
      Begin JS Experiment:
        var flage;
        flage = 0;
      Begin JS Routine:
        r = Math.random();
        if (((r < 0.333) && (flage == 0))) {
            min = Math.ceil(1);
            max = Math.floor(10);
            photo = "Faces/Nonfamiliar/";
            idi=getRandomInt(1, 10);
            photo= photo.concat(idi.toString(),'.jpg');
            value = 2;
            flage = 1;
        } else {
                min = Math.ceil(1);
                max = Math.floor(10);
                photo = "Faces/Familiar/";
                idi=getRandomInt(1, 10);
                photo=photo.concat(idi.toString(),'.jpg');
                value = 1;
                flage = 0;
            }
        delay = (1 + Math.random());
    ImageComponent image
      image [set every repeat] = $photo
      size = (0.5, 0.5)
      startEstim = 1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.4
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 300
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    Routine Stimuli
  LoopTerminator trials
