PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Faces/Nonfamiliar/1.jpg', 'Faces/Nonfamiliar/2.jpg', 'Faces/Nonfamiliar/3.jpg', 'Faces/Nonfamiliar/4.jpg', 'Faces/Nonfamiliar/5.jpg', 'Faces/Nonfamiliar/6.jpg', 'Faces/Nonfamiliar/7.jpg', 'Faces/Nonfamiliar/8.jpg', 'Faces/Nonfamiliar/9.jpg', 'Faces/Nonfamiliar/10.jpg']
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Face01
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Salam khosh amadi
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimuli
    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        var flage;
        flage = 0;


        function getRandomInt(min, max) {
            min = Math.ceil(min);
            max = Math.floor(max);
            return Math.floor(Math.random() * (max - min + 1)) + min;
        }
      Begin JS Routine:
        r = Math.random();
        if (((r < 0.333) && (flage === 0))) {
            photo = "/Faces/Nonfamiliar/";
            photo.concat(getRandomInt(1, 70).toString(),'.jpg');
            value = 2;
            flage = 1;
        } else {
                photo = "/Faces/Familiar/";
                photo.concat(getRandomInt(1, 123).toString(),'.jpg');
                value = 1;
                flage = 0;
            }
        delay = (1 + Math.random());
    ImageComponent image
      image [set every repeat] = $photo
      size = (0.5, 0.5)
      startEstim = 1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 300
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    Routine Stimuli
  LoopTerminator trials
