PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['nontarget1.png', 'nontarget2.png', 'nontarget3.png', 'nontarget4.png', 'nontarget5.png', 'target.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Slider
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 'Please focus on the dots.\n\n Press "Space" to go next page'
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimuli
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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      text:
        Down the Rabbit-Hole

        Alice was beginning to get very tired of sitting by her sister on the bank, and of having nothing to do: once or twice she had peeped into the book her sister was reading, but it had no pictures or conversations in it, "and what is the use of a book," thought Alice, "without pictures or conversations?"

        So she was considering in her own mind (as well as she could, for the hot day made her feel very sleepy and stupid) whether the pleasure of making a daisy-chain would be worth the trouble of getting up and picking the daisies, when suddenly a White Rabbit with pink eyes ran close by her.

        There was nothing so very remarkable in that; nor did Alice think it so very much out of the way to hear the Rabbit say to itself, "Oh dear! Oh dear! I shall be too late!" (when she thought it over afterwards, it occurred to her that she ought to have wondered at this, but at the time it all seemed quite natural); but when the Rabbit actually took a watch out of its waistcoat-pocket, and looked at it, and then hurried on, Alice started to her feet, for it flashed across her mind that she had never before seen a rabbit with either a waistcoat-pocket, or a watch to take out of it, and burning with curiosity, she ran across the field after it, and was just in time to see it pop down a large rabbit-hole under the hedge.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine s2
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine Stimuli
  Routine s2
